PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = PCT
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine welcome
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    TextComponent text_welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ¡Te damos la bienvenida!

        [Presiona la barra espaciadora para continuar...]
    KeyboardComponent key_resp_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro
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    TextComponent text_intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Coloca tus dedos indices en las letras F y J

        En la pantalla verás dos recuadros.
        Presiona el botón del lado en el que aparezca
        algo dentro del recuadro.

        Ignora los cambios en los recuadros.

        [Para continuar presiona la barra espaciadora...]
    KeyboardComponent key_resp_intro
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fix
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    PolygonComponent cross
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine precue
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    PolygonComponent cross_precue
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    PolygonComponent left_square_precue
      fillColor = transparent
      lineWidth = 2
      pos = (-.4, 0)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent right_square_precue
      fillColor = transparent
      lineWidth = 2
      pos = (.4, 0)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine cue
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    PolygonComponent cross_cue
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    PolygonComponent left_square_cue
      fillColor = transparent
      lineWidth [set every repeat] = 2
      pos = (-.4, 0)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent right_square_cue
      fillColor = transparent
      lineWidth [set every repeat] = 2
      pos = (.4, 0)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine trial
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    PolygonComponent cross_trial
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent left_square_trial
      fillColor = transparent
      lineWidth = 2
      pos = (-.4, 0)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent right_square_trial
      fillColor = transparent
      lineWidth = 2
      pos = (.4, 0)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_trial
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent star
      fillColor = white
      pos [set every repeat] = (0, 0)
      shape = star7
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine welcome
  Routine intro
  Routine fix
  Routine precue
  Routine cue
  Routine trial
